---
API: 2
OpenSesame: 3.1.9
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title Bayes_Version1
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 24
set font_italic no
set font_family sans
set font_bold no
set experiment_path "S:\\MNHS-SPP\\Circadia\\Projects\\Current projects\\Drummond_2018_ONRG_DecisionMaking\\Materials\\Tasks\\Programming\\Bayes"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi no
set background white

define sketchpad Example_1
	set duration mouseclick
	set description "Shows what stimuli look like"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=26 html=yes show_if=always text="The computer will simulate draws of black and white balls from a box.<br /><br />There are two possible boxes." x=0 y=-224 z_index=0
	draw image center=1 file="boxes.bmp" scale=1 show_if=always x=0 y=64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=26 html=yes show_if=always text="LEFT BOX" x=-160 y=-96 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=26 html=yes show_if=always text="RIGHT BOX" x=160 y=-96 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=27 html=yes show_if=always text="You will be asked to indicate which box the balls were drawn from. " x=0 y=288 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=27 html=yes show_if=always text="" x=-416 y=288 z_index=0

define sketchpad Example_2_1
	set duration mouseclick
	set description "Shows the odds"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=26 html=yes show_if=always text="In each round the computer will select one of the boxes to draw balls from, <br />based on the odds listed below the boxes." x=0 y=-224 z_index=0
	draw image center=1 file="boxes.bmp" scale=1 show_if=always x=0 y=64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=26 html=yes show_if=always text="LEFT BOX" x=-160 y=-96 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=26 html=yes show_if=always text="RIGHT BOX" x=160 y=-96 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=27 html=yes show_if=always text="" x=-416 y=288 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=27 html=yes show_if=always text="2/10" x=-128 y=224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=27 html=yes show_if=always text="8/10" x=128 y=224 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=black fill=0 penwidth=1 show_if=always x1=-256 x2=-160 y1=224 y2=224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=27 html=yes show_if=always text=Odds x=-352 y=224 z_index=0

define sketchpad Example_2_1_1
	set duration mouseclick
	set description "Shows the sample draws"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=26 html=yes show_if=always text="In each round, after the computer has selected a box, <br />the computer will randomly draw 1 ball from the box, 8 separate times. " x=0 y=-224 z_index=0
	draw image center=1 file="boxes.bmp" scale=1 show_if=always x=0 y=64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=26 html=yes show_if=always text="LEFT BOX" x=-160 y=-96 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=26 html=yes show_if=always text="RIGHT BOX" x=160 y=-96 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=27 html=yes show_if=always text="" x=-416 y=288 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=27 html=yes show_if=always text="2/10" x=-128 y=224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=27 html=yes show_if=always text="8/10" x=128 y=224 z_index=0
	draw image center=1 file="blkB_2.bmp" scale=1 show_if=always x=0 y=320 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=black fill=0 penwidth=1 show_if=always x1=-384 x2=-288 y1=320 y2=320 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=27 html=yes show_if=always text="Sample Draw" x=-384 y=288 z_index=0

define sketchpad Example_2_1_1_1
	set duration mouseclick
	set description "Shows the sample draws"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=26 html=yes show_if=always text="PRACTICE ITEM" x=0 y=-224 z_index=0
	draw image center=1 file="boxes.bmp" scale=1 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=27 html=yes show_if=always text="" x=-416 y=288 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=27 html=yes show_if=always text="0/10" x=-128 y=224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=27 html=yes show_if=always text="10/10" x=128 y=224 z_index=0
	draw image center=1 file="blkB_2.bmp" scale=1 show_if=always x=0 y=320 z_index=0

define sketchpad Example_2_1_1_1_1
	set duration mouseclick
	set description "Shows the sample draws"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=26 html=yes show_if=always text="PRACTICE ITEM" x=0 y=-224 z_index=0
	draw image center=1 file="boxes.bmp" scale=1 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=27 html=yes show_if=always text="" x=-416 y=288 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=27 html=yes show_if=always text="0/10" x=-128 y=224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=27 html=yes show_if=always text="10/10" x=128 y=224 z_index=0
	draw image center=1 file="blkB_2.bmp" scale=1 show_if=always x=0 y=320 z_index=0
	draw ellipse color=black fill=0 h=448 penwidth=1 show_if=always w=320 x=-32 y=-192 z_index=0

define form_text_display Instructions_R
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Start Task"
	set margins "50;50;50;50"
	set form_title "It's Time for the Real Task!"
	__form_text__
	Well done! 
	
	Now it's time to perform the real task. 
	
	Remember:
	
	Press 1 if you think the left box was chosen
	
	OR
	
	Press 0 if you think the right box was chosen
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sketchpad bins_odds_balls
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="[oddsA]" x=-160 y=96 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="[oddsB]<br />" x=160 y=114 z_index=0
	draw image center=1 file="boxes.BMP" scale=1 show_if=always x=0 y=-64 z_index=0
	draw image center=1 file="blkB_[blkB].BMP" scale=1 show_if=always x=0 y=224 z_index=0

define sketchpad bins_odds_balls_prac_1
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="boxes.bmp" scale=1 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=24 html=yes show_if=always text="[oddsA]" x=-160 y=192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=24 html=yes show_if=always text="[oddsB]" x=128 y=192 z_index=0
	draw image center=1 file="blkB_[blkB].BMP" scale=1 show_if=always x=0 y=320 z_index=0

define loop block_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 35
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 blkB 2
	setcycle 0 oddsA "1/10"
	setcycle 0 oddsB "9/10"
	setcycle 1 blkB 0
	setcycle 1 oddsA "7/10"
	setcycle 1 oddsB "3/10"
	setcycle 2 blkB 2
	setcycle 2 oddsA "2/10"
	setcycle 2 oddsB "8/10"
	setcycle 3 blkB 1
	setcycle 3 oddsA "7/10"
	setcycle 3 oddsB "3/10"
	setcycle 4 blkB 3
	setcycle 4 oddsA "2/10"
	setcycle 4 oddsB "8/10"
	setcycle 5 blkB 1
	setcycle 5 oddsA "9/10"
	setcycle 5 oddsB "1/10"
	setcycle 6 blkB 4
	setcycle 6 oddsA "2/10"
	setcycle 6 oddsB "8/10"
	setcycle 7 blkB 5
	setcycle 7 oddsA "5/10"
	setcycle 7 oddsB "5/10"
	setcycle 8 blkB 7
	setcycle 8 oddsA "1/10"
	setcycle 8 oddsB "9/10"
	setcycle 9 blkB 5
	setcycle 9 oddsA "8/10"
	setcycle 9 oddsB "2/10"
	setcycle 10 blkB 7
	setcycle 10 oddsA "3/10"
	setcycle 10 oddsB "7/10"
	setcycle 11 blkB 6
	setcycle 11 oddsA "8/10"
	setcycle 11 oddsB "2/10"
	setcycle 12 blkB 6
	setcycle 12 oddsA "9/10"
	setcycle 12 oddsB "1/10"
	setcycle 13 blkB 8
	setcycle 13 oddsA "4/10"
	setcycle 13 oddsB "6/10"
	setcycle 14 blkB 8
	setcycle 14 oddsA "0/10"
	setcycle 14 oddsB "10/10"
	setcycle 15 blkB 7
	setcycle 15 oddsA "0/10"
	setcycle 15 oddsB "10/10"
	setcycle 16 blkB 5
	setcycle 16 oddsA "0/10"
	setcycle 16 oddsB "10/10"
	setcycle 17 blkB 6
	setcycle 17 oddsA "0/10"
	setcycle 17 oddsB "10/10"
	setcycle 18 blkB 6
	setcycle 18 oddsA "10/10"
	setcycle 18 oddsB "0/10"
	setcycle 19 blkB 3
	setcycle 19 oddsA "10/10"
	setcycle 19 oddsB "0/10"
	setcycle 20 blkB 6
	setcycle 20 oddsA "10/10"
	setcycle 20 oddsB "0/10"
	setcycle 21 blkB 4
	setcycle 21 oddsA "3/10"
	setcycle 21 oddsB "7/10"
	setcycle 22 blkB 5
	setcycle 22 oddsA "1/10"
	setcycle 22 oddsB "9/10"
	setcycle 23 blkB 2
	setcycle 23 oddsA "9/10"
	setcycle 23 oddsB "1/10"
	setcycle 24 blkB 3
	setcycle 24 oddsA "7/10"
	setcycle 24 oddsB "3/10"
	setcycle 25 blkB 4
	setcycle 25 oddsA "4/10"
	setcycle 25 oddsB "6/10"
	setcycle 26 blkB 3
	setcycle 26 oddsA "8/10"
	setcycle 26 oddsB "2/10"
	setcycle 27 blkB 4
	setcycle 27 oddsA "5/10"
	setcycle 27 oddsB "5/10"
	setcycle 28 blkB 5
	setcycle 28 oddsA "2/10"
	setcycle 28 oddsB "8/10"
	setcycle 29 blkB 6
	setcycle 29 oddsA "6/10"
	setcycle 29 oddsB "4/10"
	setcycle 30 blkB 5
	setcycle 30 oddsA "3/10"
	setcycle 30 oddsB "7/10"
	setcycle 31 blkB 6
	setcycle 31 oddsA "1/10"
	setcycle 31 oddsB "9/10"
	setcycle 32 blkB 3
	setcycle 32 oddsA "9/10"
	setcycle 32 oddsB "1/10"
	setcycle 33 blkB 4
	setcycle 33 oddsA "7/10"
	setcycle 33 oddsB "3/10"
	setcycle 34 blkB 5
	setcycle 34 oddsA "4/10"
	setcycle 34 oddsB "6/10"
	run trial_sequence

define loop block_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 blkB 3
	setcycle 0 oddsA "0/10"
	setcycle 0 oddsB "10/10"
	setcycle 1 blkB 8
	setcycle 1 oddsA "5/10"
	setcycle 1 oddsB "5/10"
	setcycle 2 blkB 6
	setcycle 2 oddsA "8/10"
	setcycle 2 oddsB "2/10"
	setcycle 3 blkB 1
	setcycle 3 oddsA "3/10"
	setcycle 3 oddsB "7/10"
	run prac_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedbackR always
	run block_loop always
	run end_of_task always

define sequence block_sequence1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback always
	run block_loop_1 always
	run Instructions_R always

define form_text_display end_of_task
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text EXIT
	set margins "50;50;50;50"
	set form_title "TASK COMPLETE!"
	__form_text__
	Well done!
	
	Please wait for a researcher.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructionsP always
	run Example_1 always
	run Example_2_1 always
	run Example_2_1_1 always
	run instructions2 always
	run Example_2_1_1_1 always
	run instructions2_1 always
	run practice_loop always
	run experimental_loop always

define loop experimental_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run block_sequence

define sketchpad fixation
	set duration 745
	set description "Displays stimuli"
	draw fixdot color="#000000" show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_p
	set duration 745
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define form_text_display instructions2
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Next
	set margins "50;50;50;50"
	set form_title Summary
	__form_text__
	You will know the number of black and white balls in each box, the initial odds that the left or right box will be chosen, and you will see which 8 balls were drawn from the chosen box. 
	
	You must indicate which box was used for that round. 
	
	In making your decision, you may use any information provided that seems relevant to you. 
	
	If you believe the LEFT BOX was selected, press 1.
	
	If you believe the RIGHT BOX was selected, press 0. 
	
	Let's practice one together!
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display instructions2_1
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Begin Practice"
	set margins "50;50;50;50"
	set form_title Instructions
	__form_text__
	It's now time to pratice a a few on your own! 
	
	REMEMBER:
	
	If you believe the LEFT BOX was selected, press 1.
	
	If you believe the RIGHT BOX was selected, press 0. 
	
	
	 
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display instructionsP
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Next
	set margins "50;50;50;50"
	set form_title "Ball Draw Game"
	__form_text__
	 The goal of this task is for you to decide which of 2 boxes a series of balls were drawn from. 
	
	 You will be asked to make this decision several times.  The amount of money you make in this task depends on the accuracy of your decisions.  At the end of the task, we will randomly pick one decision to count for payoff. If you answer this question correctly, you will receive $50. If you answer incorrectly, you will receive $0. 
	 
	 Let's go through the instructions together. 
	__end__
	set font Arial
	set description "A simple text display form"
	set cols "1;1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 4 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define keyboard_response keyboard_response
	set timeout 6000
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;0"

define keyboard_response keyboard_response_1
	set timeout 6000
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;0"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define form_text_display new_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>Title</span>"
	set form_text "Your message"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"

define sequence prac_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_p always
	run bins_odds_balls_prac_1 always
	run keyboard_response_1 always

define loop practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run block_sequence1

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback reset_feedbackR
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation always
	run bins_odds_balls always
	run keyboard_response always
	run logger always

